PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1200, 600]
  expName = simpleIdea
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Routines
  Routine InitExperiment
    CodeComponent InitCode
      Code Type = Py
      Begin Experiment:
        # get packages we might need
        import random

        # Experiment running conditions
        deltas = [200, 300, 400, 500]
        num_trials = 4

        # Screen settings
        Screen_height = 600
        Screen_width = 1200

        # Trial conditions
        Trial_time = 120 # this is specified in frames for now

        # avatar setup
        box_size = 50
        avatar_speed = 2
        box_truck   = [1,-1,-1]
        box_placed  = [.5,-.5,-.5]
        box_build   = [.09, -.45,-.85]
        box_burning = [.64, -.17, -.76]
        box_burnt   = [-.9, -.9, -.9]
  Routine WelcomeScreen
    TextComponent WelcomeText
      letterHeight = 25
      startVal [frame N] = 0.0
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      text:
        Welcome to the experiment

        Press Space to continue
    KeyboardComponent WelcomeEscape
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PlaceAvatarInit
    CodeComponent PlaceInit
      Code Type = Py
      Begin Experiment:
        trial_num = 0
      Begin Routine:
        # get delta for this trial
        delta_thisT = deltas[trial_num]

        # set target position
        left_target = -delta_thisT
        right_target = delta_thisT

        # setting colours
        # Isn't quite working... but it's not the most important step just now
        choice = random.choice([0,1])
        # print(choice)
        if choice == 1:
            left_colour = box_burning
            right_colour = box_build
        else :
            left_colour = box_burning
            right_colour = box_build
      End Routine:
        trial_num += 1
  Routine PlacingAvatar
    PolygonComponent PlacementArea
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos = (0, 100)
      shape = rectangle
      size [set every frame] = (Screen_width, box_size + 10)
      startVal [time (s)] = 0.0
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    MouseComponent AvatarMouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [frame N] = 0.0
      timeRelativeTo = routine
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    PolygonComponent leftTarget
      fillColor [set every frame] = $box_build
      lineColor [set every frame] = $box_build
      pos [set every frame] = (left_target, 0)
      shape = rectangle
      size [set every frame] = (box_size, box_size)
      startVal [time (s)] = 0.0
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    PolygonComponent rightTarget
      fillColor [set every frame] = $box_build
      lineColor [set every frame] = $box_build
      pos [set every frame] = (right_target, 0)
      shape = rectangle
      size [set every frame] = (box_size, box_size)
      startVal [time (s)] = 0.0
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    KeyboardComponent PlacingKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent AvatarPlace
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = (Avatar_x, Avatar_y)
      shape = rectangle
      size [set every frame] = (box_size, box_size)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        Avatar_x = 0
        Avatar_y = 100
      Begin Routine:
        frame = 0
        Avatar_x = 0
      Each Frame:
        # check for mouse click
        if AvatarMouse.getPressed()[0]:
            Avatar_x = AvatarMouse.getPos()[0]
            Avatar_y = 100
  Routine DrivingAvatar
    KeyboardComponent DrivingKeys
      allowedKeys = 'up','down','right','left'
      forceEndRoutine = False
      startVal [frame N] = 20
      stopVal [frame N] = $Trial_time + 20
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    TextComponent text
      letterHeight = 20
      startVal [frame N] = 0.0
      stopVal [frame N] = 20
      text = Ready?
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    TextComponent text_2
      letterHeight = 20
      startVal [frame N] = 20
      stopVal [frame N] = $Trial_time + 20
      text = Drive!
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    PolygonComponent DrivingBoundary
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      pos = (0, 100)
      shape = rectangle
      size [set every frame] = (Screen_width, box_size + 10)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + 20
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    CodeComponent DrivingCode
      Code Type = Py
      Begin Routine:
        AvatarDrive_x = Avatar_x
        AvatarDrive_y = Avatar_y
      Each Frame:
        key_pressed = DrivingKeys.keys

        if key_pressed == 'up':
            AvatarDrive_y += avatar_speed
        elif key_pressed == 'down':
            AvatarDrive_y -= avatar_speed
        elif key_pressed == 'right':
            AvatarDrive_x += avatar_speed
        elif key_pressed == 'left':
            AvatarDrive_x -= avatar_speed
    PolygonComponent AvatarPlaced
      fillColor [set every frame] = $box_placed
      lineColor [set every frame] = $box_placed
      pos [set every frame] = (Avatar_x, Avatar_y)
      shape = rectangle
      size [set every frame] = (box_size, box_size)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + 20
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    PolygonComponent AvatarDrive
      fillColor [set every frame] = $box_truck
      lineColor [set every frame] = $box_truck
      pos [set every frame] = (AvatarDrive_x, AvatarDrive_y)
      shape = rectangle
      size [set every frame] = (box_size, box_size)
      startVal [time (s)] = 0.0
      stopVal [frame N] = $Trial_time + 20
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    PolygonComponent LeftBuild
      fillColor [set every frame] = $box_build
      lineColor [set every frame] = $box_build
      pos [set every frame] = (left_target, 0)
      shape = rectangle
      size [set every frame] = (box_size, box_size)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + 20
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    PolygonComponent RightBuild
      fillColor [set every frame] = $box_build
      lineColor [set every frame] = $box_build
      pos [set every frame] = (right_target, 0)
      shape = rectangle
      size [set every frame] = (box_size, box_size)
      startVal [frame N] = 0.0
      stopVal [frame N] = $Trial_time + 20
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Flow
  Routine InitExperiment
  Routine WelcomeScreen
  LoopInitiator DecisionTrialLoop loopType="TrialHandler"
    loopType = random
    nReps = $num_trials
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    Routine PlaceAvatarInit
    Routine PlacingAvatar
    Routine DrivingAvatar
  LoopTerminator DecisionTrialLoop
